(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// **************** Main Components **************************

(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "EulerTransform")
(Metric "AdvancedMattesMutualInformation")

// ***************** Transformation **************************

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")

//Save composite ITK transform
(ITKTransformOutputFileNameExtension "tfm")



// ******************* Similarity measure *********************

(NumberOfHistogramBins 64)
(ErodeMask "false")

// ******************** Multiresolution **********************

(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 2  4 4 1  1 1 1 )

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 500)
(MaximumStepLength 1.0)
(RequiredRatioOfValidSamples 0.05)

// **************** Image sampling **********************

(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

(DefaultPixelValue 0)
(WriteResultImage "true")
(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)

(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")
